PsychoPy2experiment version="2022.2.5"
Settings
  Data filename = u'data/' + 'sub_' + expInfo['participant'] + '/sub%s_%s_%s' % (expInfo['participant'], expName, expInfo['date'])
  Experiment info = {'participant': '000'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['instructions/example_trial.png', 'stimuli/C1_Images_Frombeautiful.png', 'stimuli/C1_Images_SteinitzNN.png', 'stimuli/C1_Images_WinterFriede(Reversed).png', 'stimuli/C2_Images_KekhayovPetrov(Reversed).png', 'stimuli/C2_Images_KrauseMeinhardt.png', 'stimuli/C2_Images_Replacement4.png', 'stimuli/C2_Images_SkujaRozenbergs(Reversed).png', 'stimuli/C3_Images_KazicVukovic(Reversed).png', 'stimuli/C3_Images_MalininAndreev(Reversed).png', 'stimuli/C3_Images_PodzerovKuntzevic(Reversed).png', 'stimuli/C3_Images_Replacement3.png', 'stimuli/C3_Images_Replacement5.png', 'stimuli/C3_Images_StudybyErcoledelRio(Reversed).png', 'stimuli/C3_Images_TylorWinter.png', 'stimuli/C4_Images_BrankaWittwer(Reversed).png', 'stimuli/C4_Images_IvanchukSavchenko(Reversed).png', 'stimuli/C4_Images_StrekalovskyShaposhlikov.png', 'stimuli/C5_Images_EasyPosition2.png', 'stimuli/C5_Images_EasyPosition5(Reversed).png', 'stimuli/C5_Images_EasyPosition6.png', 'stimuli/NC1_Images_Frombeautiful(Nomate).png', 'stimuli/NC1_Images_SteinitzNN(Nomate).png', 'stimuli/NC1_Images_WinterFriede(Nomate)(Reversed).png', 'stimuli/NC2_Images_KekhayovPetrov(Nomate)(Reversed).png', 'stimuli/NC2_Images_KrauseMeinhardt(Nomate).png', 'stimuli/NC2_Images_Replacement4(Nomate).png', 'stimuli/NC2_Images_SkujaRozenbergs(Nomate)(Reversed).png', 'stimuli/NC3_Images_KazicVukovic(Nomate)(Reversed).png', 'stimuli/NC3_Images_MalininAndreev(Nomate)(Reversed).png', 'stimuli/NC3_Images_PodzerovKuntzevic(Nomate)(Reversed).png', 'stimuli/NC3_Images_Replacement3(Nomate).png', 'stimuli/NC3_Images_Replacement5(Nomate).png', 'stimuli/NC3_Images_StudybyErcoleDelRio(Nomate)(Reversed).png', 'stimuli/NC3_Images_TylorWinter(Nomate).png', 'stimuli/NC4_Images_BrankaWittwer(Nomate)(Reversed).png', 'stimuli/NC4_Images_IvanchukSavchenko(Nomate)(Reversed).png', 'stimuli/NC4_Images_StrekalovskyShaposhlikov(Nomate).png', 'stimuli/NC5_Images_EasyPosition2(Nomate).png', 'stimuli/NC5_Images_EasyPosition5(Nomate)(Reversed).png', 'stimuli/NC5_Images_EasyPosition6(Nomate).png', 'informed_consent/informed_consent.png', 'datasets/triplets.csv']
  Save csv file = True
  Save log file = False
  Save wide csv file = False
  Screen = 2
  Show mouse = True
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = odd_one_out
  exportHTML = manually
  keyboardBackend = ioHub
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Routines
  Routine welcome
    TextComponent welcome_text
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Welcome, in this experiment you will be presented with three chess scenario's, side-by-side.

        It is your task to select the odd-one-out. In other words, choose the one you think is the most different when comparing to the other two scenario's.

        To select the odd-one-out you can use your mouse. Click on the scenario you think is the most distinct. There is no time limit.

        We will begin by presenting an example of a single trial. For this example there is no need to concentrate on whether the decision is correct; instead, make yourself familiar with the overal layout of the task.

        After this example you can practice the task yourself.

        Press <space> whenever you are ready.
    KeyboardComponent key_welcome
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
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    CodeComponent code_welcome
      Code Type = Both
      Begin JS Routine:
        current_trial_type = "welcome_screen"; // Change as you wish
        current_event = "show_screen"; // Change as you wish
        current_rt = "";
        current_time_elapsed = (global_timer.getTime() - ref_time);

        counter = addTrialInfo(current_trial_type,
            current_event,
            current_rt,
            current_time_elapsed,
            counter);
        // To prevent info in same routine to overwrite previous info
        psychoJS.experiment.nextEntry();
      Begin Routine:
        # Store timeline information
        current_trial_type = "welcome_screen" # Change as you wish
        current_event = "show_screen" # Change as you wish
        current_rt = ""
        current_time_elapsed = global_timer.getTime()-ref_time

        counter = addTrialInfo(current_trial_type,
            current_event,
            current_rt,
            current_time_elapsed,
            counter)

        thisExp.nextEntry()
      Each Frame:
        pressed = False # Flag to prevent multiple logs

        # Checks for keypresses (only valid ones are allowed)
        # Logs keypress to the datafile when pressed
        if len(key_welcome.keys) > 0 and not pressed:
            # Store timeline information
            current_event = "keypress"
            current_rt = key_welcome.rt
            current_time_elapsed = global_timer.getTime()-ref_time

            counter = addTrialInfo(current_trial_type,
                current_event,
                current_rt,
                current_time_elapsed,
                counter)
            pressed = True
      Each JS Frame:
        pressed = false;

        // Checks for keypresses (only valid ones are allowed)
        // Logs keypress to the datafile when pressed
        if ((typeof key_welcome.keys !== 'undefined') && (! pressed)) {
            current_event = "keypress";
            current_rt = key_welcome.rt;
            current_time_elapsed = (global_timer.getTime() - ref_time);

            counter = addTrialInfo(current_trial_type,
                current_event,
                current_rt,
                current_time_elapsed,
                counter);
            pressed = true;
        }
  Routine practice
    PolygonComponent fixation_practice
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    PolygonComponent frame1_pract
      fillColor = 0.0000, 0.0000, 0.0000
      lineWidth = 2
      opacity [set every frame] = 0
      pos = (-0.5, 0)
      saveStartStop = False
      shape = rectangle
      size = (0.45, 0.45)
      startVal [time (s)] = 0.5
      units = height
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    PolygonComponent frame2_pract
      fillColor = 0.0000, 0.0000, 0.0000
      lineWidth = 2
      opacity [set every frame] = 0
      saveStartStop = False
      shape = rectangle
      size = (0.45, 0.45)
      startVal [time (s)] = 0.5
      units = height
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    PolygonComponent frame3_pract
      fillColor = 0.0000, 0.0000, 0.0000
      lineWidth = 2
      opacity [set every frame] = 0
      pos = (0.5, 0)
      saveStartStop = False
      shape = rectangle
      size = (0.45, 0.45)
      startVal [time (s)] = 0.5
      units = height
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    ImageComponent stim1_pract
      image [set every repeat] = $'stimuli/' + Stim1
      pos = (-0.5, 0)
      saveStartStop = False
      size = (0.4, 0.4)
      startVal [time (s)] = 0.5
      units = height
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    ImageComponent stim2_pract
      image [set every repeat] = $'stimuli/' + Stim2
      saveStartStop = False
      size = (0.4, 0.4)
      startVal [time (s)] = 0.5
      units = height
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    ImageComponent stim3_pract
      image [set every repeat] = $'stimuli/' + Stim3
      pos = (0.5, 0)
      saveStartStop = False
      size = (0.4, 0.4)
      startVal [time (s)] = 0.5
      units = height
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    MouseComponent mouse_pract
      clickable = stim1_pract, stim2_pract, stim3_pract
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      saveParamsClickable = name
      saveStartStop = False
      startVal [time (s)] = 0.5
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    TextComponent question_text_pract
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.5
      text = Which is the odd-one-out?
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    CodeComponent code_pract
      Code Type = Both
      Begin JS Routine:
        // Store timeline information
        current_trial_type = "practice_trial"; // Change as you wish
        current_event = "stimulus_presentation"; // Change as you wish
        current_rt = "";
        current_time_elapsed = (global_timer.getTime() - ref_time);
        counter = addTrialInfo(current_trial_type, current_event, current_rt, current_time_elapsed, counter);

        // Go to next row to prevent overwriting information.
        psychoJS.experiment.nextEntry();
      Begin Routine:
        # Store timeline information
        current_trial_type = "practice_trial" # Change as you wish
        current_event = "stimulus_presentation" # Change as you wish
        current_rt = ""
        current_time_elapsed = global_timer.getTime()-ref_time

        counter = addTrialInfo(current_trial_type,
            current_event,
            current_rt,
            current_time_elapsed,
            counter)
        # Go to next row to prevent overwriting information.
        thisExp.nextEntry()
      Each Frame:
        # If mouse cursor hovers over any stimulus, present square frame.
        # Otherwise, hide it
        if mouseOnStim(stim1_pract, mouse_pract):
            frame1_pract.opacity = 1
        else:
            frame1_pract.opacity = 0

        if mouseOnStim(stim2_pract, mouse_pract):
            frame2_pract.opacity = 1
        else:
            frame2_pract.opacity = 0

        if mouseOnStim(stim3_pract, mouse_pract):
            frame3_pract.opacity = 1
        else:
            frame3_pract.opacity = 0

        # Log response if a valid click was received
        if gotValidClick:
            # Get time elapsed since start exp.
            current_time_elapsed = global_timer.getTime()-ref_time
            # Log response
            counter = logClickResponse(mouse_pract,
                current_trial_type,
                practiceTrials.thisN+1,
                current_time_elapsed,
                counter)

        # Stop routine after n trials
        if practiceTrials.thisN == (nPractice-1):
            practiceTrials.finished = True
      Each JS Frame:
        // If mouse cursor hovers over any stimulus, present square frame.
        // Otherwise, hide it
        if (mouseOnStim(stim1_pract, mouse_pract)) {
            frame1_pract.opacity = 1;
        } else {
            frame1_pract.opacity = 0;
        }
        if (mouseOnStim(stim2_pract, mouse_pract)) {
            frame2_pract.opacity = 1;
        } else {
            frame2_pract.opacity = 0;
        }
        if (mouseOnStim(stim3_pract, mouse_pract)) {
            frame3_pract.opacity = 1;
        } else {
            frame3_pract.opacity = 0;
        }
        // Log response if a valid click was received
        if (gotValidClick) {
            current_time_elapsed = (global_timer.getTime() - ref_time);
            counter = logClickResponse(mouse_pract, current_trial_type, (practiceTrials.thisN + 1), current_time_elapsed, counter);
        }
        // Stop routine after n trials
        if ((practiceTrials.thisN === (nPractice - 1))) {
            practiceTrials.finished = true;
        }
  Routine exit
    TextComponent exit_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        That was it!

        Thank you for your time and attention.

        Press <space> to leave the experiment.
    KeyboardComponent key_exit
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
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    CodeComponent code_exit
      Code Type = Both
      Begin JS Routine:
        // Store timeline information
        current_trial_type = "exit_trial";
        current_event = "show_screen";
        current_rt = "";
        current_time_elapsed = (global_timer.getTime() - ref_time);
        counter = addTrialInfo(current_trial_type, current_event, current_rt, current_time_elapsed, counter);

        // To prevent info in same routine to overwrite previous info
        psychoJS.experiment.nextEntry();
      Begin Routine:
        # Store timeline information
        current_trial_type = "exit_trial"
        current_event = "show_screen"
        current_rt = ""
        current_time_elapsed = global_timer.getTime()-ref_time

        counter = addTrialInfo(current_trial_type,
            current_event,
            current_rt,
            current_time_elapsed,
            counter)
        # To prevent info in same routine to overwrite previous info
        thisExp.nextEntry()
      Each Frame:
        pressed = False # Flag to prevent multiple logs

        # Checks for keypresses (only valid ones are allowed)
        # Logs keypress to the datafile when pressed
        if len(key_exit.keys) > 0 and not pressed:
            # Store timeline information
            current_event = "keypress"
            current_rt = key_exit.rt
            current_time_elapsed = global_timer.getTime()-ref_time

            counter = addTrialInfo(current_trial_type,
                current_event,
                current_rt,
                current_time_elapsed,
                counter)
            pressed = True
      Each JS Frame:
        pressed = false; // Flag to prevent multiple logs

        // Checks for keypresses (only valid ones are allowed)
        // Logs keypress to the datafile when pressed
        if (((typeof key_exit.keys !== 'undefined') && (! pressed))) {
            current_event = "keypress";
            current_rt = key_exit.rt;
            current_time_elapsed = (global_timer.getTime() - ref_time);
            counter = addTrialInfo(current_trial_type, current_event, current_rt, current_time_elapsed, counter);
            pressed = true;
        }
  Routine pause
    TextComponent pause_text
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        We have finished practicing!

        Let's start with the experiment, the task remains the same as it was during practice.

        Press <space> to continue...
    KeyboardComponent key_pause
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_pause
      Code Type = Both
      Begin JS Routine:
        // Store timeline information
        current_trial_type = "pause_trial";
        current_event = "show_screen";
        current_rt = "";
        current_time_elapsed = (global_timer.getTime() - ref_time);
        counter = addTrialInfo(current_trial_type, current_event, current_rt, current_time_elapsed, counter);

        // To prevent info in same routine to overwrite previous info
        psychoJS.experiment.nextEntry();
      Begin Routine:
        # Store timeline information
        current_trial_type = "pause_trial"
        current_event = "show_screen"
        current_rt = ""
        current_time_elapsed = global_timer.getTime()-ref_time

        counter = addTrialInfo(current_trial_type,
            current_event,
            current_rt,
            current_time_elapsed,
            counter)
        # To prevent info in same routine to overwrite previous info
        thisExp.nextEntry()
      Each Frame:
        pressed = False # Flag to prevent multiple logs

        # Checks for keypresses (only valid ones are allowed)
        # Logs keypress to the datafile when pressed
        if len(key_pause.keys) > 0 and not pressed:
            # Store timeline information
            current_event = "keypress"
            current_rt = key_pause.rt
            current_time_elapsed = global_timer.getTime()-ref_time

            counter = addTrialInfo(current_trial_type,
                current_event,
                current_rt,
                current_time_elapsed,
                counter)
            pressed = True
      Each JS Frame:
        pressed = false; // Flag to prevent multiple logs

        // Checks for keypresses (only valid ones are allowed)
        // Logs keypress to the datafile when pressed
        if (((typeof key_pause.keys !== 'undefined') && (! pressed))) {
            current_event = "keypress";
            current_rt = key_pause.rt;
            current_time_elapsed = (global_timer.getTime() - ref_time);
            counter = addTrialInfo(current_trial_type, current_event, current_rt, current_time_elapsed, counter);
            pressed = true;
        }
  Routine example
    ImageComponent example_trial
      image = instructions/example_trial.png
      saveStartStop = False
      size = (1.7, 1)
      startVal [time (s)] = 0
      texture resolution = 256
      units = height
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    TextComponent example_text
      letterHeight = 0.03
      pos = (0, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Let's say you think the most distinct scenario is the one in the middle.
        You can then use your mouse to select this specific scenario as the odd-one-out.

        Press <space> to continue to the practice trials...
    KeyboardComponent key_example
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_example
      Code Type = Both
      Begin JS Routine:
        current_trial_type = "example_trial";
        current_event = "show_screen";
        current_rt = "";
        current_time_elapsed = (global_timer.getTime() - ref_time);

        counter = addTrialInfo(current_trial_type, current_event, current_rt, current_time_elapsed, counter);

        // To prevent info in same routine to overwrite previous info
        psychoJS.experiment.nextEntry();
      Begin Routine:
        # Store timeline information
        current_trial_type = "example_trial"
        current_event = "show_screen"
        current_rt = ""
        current_time_elapsed = global_timer.getTime()-ref_time

        counter = addTrialInfo(current_trial_type,
            current_event,
            current_rt,
            current_time_elapsed,
            counter)
      Each Frame:
        pressed = False # Flag to prevent multiple logs

        # Checks for keypresses (only valid ones are allowed)
        # Logs keypress to the datafile when pressed
        if len(key_example.keys) > 0 and not pressed:
            # Store timeline information
            current_event = "keypress"
            current_rt = key_example.rt
            current_time_elapsed = global_timer.getTime()-ref_time

            counter = addTrialInfo(current_trial_type,
                current_event,
                current_rt,
                current_time_elapsed,
                counter)
            pressed = True
      Each JS Frame:
        pressed = false; // Flag to prevent multiple logs

        // Checks for keypresses (only valid ones are allowed)
        // Logs keypress to the datafile when pressed
        if (((typeof key_example.keys !== 'undefined')  && (! pressed))) {
            current_event = "keypress";
            current_rt = key_example.rt;
            current_time_elapsed = (global_timer.getTime() - ref_time);
            counter = addTrialInfo(current_trial_type, current_event, current_rt, current_time_elapsed, counter);
            pressed = true;
        }
  Routine IC
    ImageComponent IC_img
      image = informed_consent/informed_consent.png
      saveStartStop = False
      size = (1.8, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_IC
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_IC
      Code Type = Both
      Begin JS Routine:
        // Store timeline information
        current_trial_type = "informed_consent"; // Change as you wish
        current_event = "show_screen"; // Change as you wish
        current_rt = "";
        current_time_elapsed = (global_timer.getTime() - ref_time);

        counter = addTrialInfo(current_trial_type,
            current_event,
            current_rt,
            current_time_elapsed,
            counter);
        // To prevent info in same routine to overwrite previous info
        psychoJS.experiment.nextEntry();
      Begin Routine:
        # Store timeline information
        current_trial_type = "informed_consent" # Change as you wish
        current_event = "show_screen" # Change as you wish
        current_rt = ""
        current_time_elapsed = global_timer.getTime()-ref_time

        counter = addTrialInfo(current_trial_type,
            current_event,
            current_rt,
            current_time_elapsed,
            counter)

        thisExp.nextEntry()
      Each Frame:
        pressed = False # Flag to prevent multiple logs

        # Checks for keypresses (only valid ones are allowed)
        # Logs keypress to the datafile when pressed
        if len(key_IC.keys) > 0 and not pressed:
            # Store timeline information
            current_trial_type = "informed_consent"
            current_event = "keypress"
            current_rt = key_IC.rt
            current_time_elapsed = global_timer.getTime()-ref_time

            counter = addTrialInfo(current_trial_type,
                current_event,
                current_rt,
                current_time_elapsed,
                counter)
            pressed = True
      Each JS Frame:
        pressed = false; // Flag to prevent multiple logs

        //Checks for keypresses (only valid ones are allowed)
        // Logs keypress to the datafile when pressed
        if ((typeof key_IC.keys !== 'undefined') && (! pressed)) {
            current_trial_type = "informed_consent";
            current_event = "keypress";
            current_rt = key_IC.rt;
            current_time_elapsed = (global_timer.getTime() - ref_time);
            counter = addTrialInfo(current_trial_type,
                current_event,
                current_rt,
                current_time_elapsed,
                counter);
            pressed = true;
        }
  Routine start
    CodeComponent global_code
      Code Type = Both
      Before Experiment:
        # Initialize counter
        counter = 0

        # Set number of trials per loop. Change as you wish
        # These are used in the code blocks of each loop
        nPractice = 2
        nMain = 2
        # Creates text definition for subset
        # to be used in main trials loop.
        subset_text = str(nPractice) + ":-1"

        # Starts timer to keep track of elapsed time
        global_timer = core.Clock()
        ref_time = global_timer.getTime()

        # function to add trial information
        def addTrialInfo(trial_type, event, rt, time_elapsed, index_count):
            thisExp.addData('trial_type', trial_type)
            thisExp.addData('trial_index', index_count)
            thisExp.addData('event', event)
            thisExp.addData('rt', rt*1000) # Expects seconds, converts to ms
            thisExp.addData('time_elapsed', time_elapsed*1000) # Same
            # Update counter
            index_count = index_count + 1
            return index_count

        # Function to check if the mouse is hovering over a stimulus
        def mouseOnStim(stim, mouse):
            # Set variables
            mousePos = mouse.getPos()
            mousePosX = mousePos[0]
            mousePosY = mousePos[1]
            mouseWithinX = False
            mouseWithinY = False
            # Check whether mouse is within image on X-axis
            # First determine x-range covered by stimulus
            stimPos = stim.pos
            stimHalfSizeX = stim.size[0]/2
            stimHalfSizeY = stim.size[1]/2
            stimLBound = stimPos[0] - stimHalfSizeX
            stimRBound = stimPos[0] + stimHalfSizeX
            # Do the same for y range
            stimLoBound = stimPos[1] - stimHalfSizeY
            stimHiBound = stimPos[1] + stimHalfSizeY

            # Check whether in x-range
            if mousePosX > stimLBound and mousePosX < stimRBound:
                mouseWithinX = True
            else:
                mouseWithinX = False

            # Check whether in y-range
            if mousePosY > stimLoBound and mousePosY < stimHiBound:
                mouseWithinY = True
            else:
                mouseWithinY = False

            # Return state
            return mouseWithinX and mouseWithinY

        # Takes in mouse object and logs response for clickable trials
        def logClickResponse(mouseObject, trial_type, trial_num, time_elapsed, trial_index):
            mouse_rt = mouseObject.time[0]
            response = mouseObject.clicked_name[0]
            stimulus = [Stim1, Stim2, Stim3]

            # Create info for response and file_name columns
            if "stim1" in response:
                response = 1
                file_name = Stim1
            elif "stim2" in response:
                response = 2
                file_name = Stim2
            else:
                response = 3
                file_name = Stim3

            thisExp.addData('trial_type', trial_type)
            thisExp.addData('trial_index', trial_index)
            thisExp.addData('event', "click_response")
            thisExp.addData('time_elapsed', time_elapsed*1000)
            thisExp.addData('stimulus', stimulus)
            thisExp.addData('response', response)
            thisExp.addData('filename', file_name)
            thisExp.addData('trial_number', trial_num)
            thisExp.addData('rt', mouse_rt*1000)
            trial_index = trial_index + 1
            return trial_index
      Before JS Experiment:
        // Initialize counter
        let counter = 0;
        // Set number of trials per loop. Change as you wish
        // These are used in the code blocks of each loop
        let nPractice = 2;
        let nMain = 2;
        // Creates text definition for subset
        // to be used in main trials loop.
        let subset_text = (nPractice.toString() + ":-1");
        // Starts timer to keep track of elapsed time
        let global_timer = new util.Clock();
        let ref_time = global_timer.getTime();
        // function to add trial information
        function addTrialInfo(trial_type, event, rt, time_elapsed, index_count) {
          // Add data to the experiment handler
          psychoJS.experiment.addData('trial_type', trial_type);
          psychoJS.experiment.addData('trial_index', index_count);
          psychoJS.experiment.addData('event', event);
          psychoJS.experiment.addData('rt', rt*1000); // Expects seconds, converts to ms
          psychoJS.experiment.addData('time_elapsed', time_elapsed*1000); // Same

          // Update counter
          index_count = index_count + 1;

          return index_count;
        }
        // Function to check if the mouse is hovering over a stimulus
        function mouseOnStim(stim, mouse) {
            var mousePos, mousePosX, mousePosY, mouseWithinX, mouseWithinY, stimHalfSizeX, stimHalfSizeY, stimHiBound, stimLBound, stimLoBound, stimPos, stimRBound;
            mousePos = mouse.getPos();
            mousePosX = mousePos[0];
            mousePosY = mousePos[1];
            mouseWithinX = false;
            mouseWithinY = false;
            stimPos = stim.pos;
            stimHalfSizeX = (stim.size[0] / 2);
            stimHalfSizeY = (stim.size[1] / 2);
            stimLBound = (stimPos[0] - stimHalfSizeX);
            stimRBound = (stimPos[0] + stimHalfSizeX);
            stimLoBound = (stimPos[1] - stimHalfSizeY);
            stimHiBound = (stimPos[1] + stimHalfSizeY);
            if (((mousePosX > stimLBound) && (mousePosX < stimRBound))) {
                mouseWithinX = true;
            } else {
                mouseWithinX = false;
            }
            if (((mousePosY > stimLoBound) && (mousePosY < stimHiBound))) {
                mouseWithinY = true;
            } else {
                mouseWithinY = false;
            }
            return (mouseWithinX && mouseWithinY);
        }
        // Takes in mouse object and logs response for clickable trials
        function logClickResponse(mouseObject, trial_type, trial_num, time_elapsed, trial_index) {
            var file_name, mouse_rt, response, stimulus;
            mouse_rt = mouseObject.time[0];
            response = mouseObject.clicked_name[0];
            stimulus = [Stim1, Stim2, Stim3];
            if (response.includes("stim1")) {
                response = 1;
                file_name = Stim1;
            } else {
                if (response.includes("stim2")) {
                    response = 2;
                    file_name = Stim2;
                } else {
                    response = 3;
                    file_name = Stim3;
                }
            }
            psychoJS.experiment.addData("trial_type", trial_type);
            psychoJS.experiment.addData("trial_index", trial_index);
            psychoJS.experiment.addData("event", "click_response");
            psychoJS.experiment.addData("time_elapsed", time_elapsed*1000);
            psychoJS.experiment.addData("stimulus", stimulus);
            psychoJS.experiment.addData("response", response);
            psychoJS.experiment.addData("filename", file_name);
            psychoJS.experiment.addData("trial_number", trial_num);
            psychoJS.experiment.addData("rt", mouse_rt*1000);
            trial_index = (trial_index + 1);
            return trial_index;
        }
      Begin Experiment:
        # Store timeline information
        current_trial_type = "start experiment"
        current_event = "loading"
        current_rt = ""
        # Get current elapsed time
        current_time_elapsed = global_timer.getTime()-ref_time

        # Store info in trial_info and return updated counter
        counter = addTrialInfo(current_trial_type,
            current_event,
            current_rt,
            current_time_elapsed,
            counter)

        # Add other columns to datafile but leave empty for now
        thisExp.addData('stimulus', "")
        thisExp.addData('response', "")
        thisExp.addData('file_name',"")
        thisExp.addData('trial_number',"")
      Begin JS Experiment:
        // Fill in variables to log
        let current_trial_type = "start experiment";
        let current_event = "loading";
        let current_rt = "";
        // Get current elapsed time
        let current_time_elapsed = (global_timer.getTime()-ref_time);

        // Store info in trial_info and return updated counter
        counter = addTrialInfo(current_trial_type,
            current_event,
            current_rt,
            current_time_elapsed,
            counter
            );

        // Add other columns but leave empty for now
        psychoJS.experiment.addData('stimulus', "")
        psychoJS.experiment.addData('response', "")
        psychoJS.experiment.addData('file_name',"")
        psychoJS.experiment.addData('trial_number',"")
  Routine main_exp
    PolygonComponent fixation_main
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    PolygonComponent frame1_main
      fillColor = 0.0000, 0.0000, 0.0000
      lineWidth = 2
      opacity [set every frame] = 0
      pos = (-0.5, 0)
      saveStartStop = False
      shape = rectangle
      size = (0.45, 0.45)
      startVal [time (s)] = 0.5
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    PolygonComponent frame2_main
      fillColor = 0.0000, 0.0000, 0.0000
      lineWidth = 2
      opacity [set every frame] = 0
      saveStartStop = False
      shape = rectangle
      size = (0.45, 0.45)
      startVal [time (s)] = 0.5
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    PolygonComponent frame3_main
      fillColor = 0.0000, 0.0000, 0.0000
      lineWidth = 2
      opacity [set every frame] = 0
      pos = (0.5, 0)
      saveStartStop = False
      shape = rectangle
      size = (0.45, 0.45)
      startVal [time (s)] = 0.5
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    ImageComponent stim1_main
      image [set every repeat] = $'stimuli/' + Stim1
      pos = (-0.5, 0)
      saveStartStop = False
      size = (0.4, 0.4)
      startVal [time (s)] = 0.5
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    ImageComponent stim2_main
      image [set every repeat] = $'stimuli/' + Stim2
      saveStartStop = False
      size = (0.4, 0.4)
      startVal [time (s)] = 0.5
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    ImageComponent stim3_main
      image [set every repeat] = $'stimuli/' + Stim3
      pos = (0.5, 0)
      saveStartStop = False
      size = (0.4, 0.4)
      startVal [time (s)] = 0.5
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    MouseComponent mouse_main
      clickable = stim1_main, stim2_main, stim3_main
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      saveParamsClickable = name
      saveStartStop = False
      startVal [time (s)] = 0.5
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    TextComponent question_text_main
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.5
      text = Which is the odd-one-out?
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    CodeComponent code_main
      Code Type = Both
      Begin JS Routine:
        // Store timeline information
        current_trial_type = "main_trial";
        current_event = "stimulus_presentation";
        current_rt = "";
        current_time_elapsed = (global_timer.getTime() - ref_time);
        counter = addTrialInfo(current_trial_type, current_event, current_rt, current_time_elapsed, counter);
        // Go to next row to prevent overwriting information.
        psychoJS.experiment.nextEntry();
      Begin Routine:
        # Store timeline information
        current_trial_type = "main_trial"
        current_event = "stimulus_presentation"
        current_rt = ""
        current_time_elapsed = global_timer.getTime()-ref_time

        counter = addTrialInfo(current_trial_type,
            current_event,
            current_rt,
            current_time_elapsed,
            counter)
        # Go to next row to prevent overwriting information.
        thisExp.nextEntry()
      Each Frame:
        # If mouse cursor hovers over any stimulus, present square frame.
        # Otherwise, hide it
        if mouseOnStim(stim1_main, mouse_main):
            frame1_main.opacity = 1
        else:
            frame1_main.opacity = 0

        if mouseOnStim(stim2_main, mouse_main):
            frame2_main.opacity = 1
        else:
            frame2_main.opacity = 0

        if mouseOnStim(stim3_main, mouse_main):
            frame3_main.opacity = 1
        else:
            frame3_main.opacity = 0

        # Log response if a valid click was received
        if gotValidClick:
            # Get time elapsed since start exp.
            current_time_elapsed = global_timer.getTime()-ref_time
            # Log response
            counter = logClickResponse(mouse_main,
                current_trial_type,
                mainTrials.thisN+1,
                current_time_elapsed,
                counter)

        # Stop routine after nMain trials
        if mainTrials.thisN == (nMain-1):
            mainTrials.finished = True
      Each JS Frame:
        // If mouse cursor hovers over any stimulus, present square frame.
        // Otherwise, hide it
        if (mouseOnStim(stim1_main, mouse_main)) {
            frame1_main.opacity = 1;
        } else {
            frame1_main.opacity = 0;
        }
        if (mouseOnStim(stim2_main, mouse_main)) {
            frame2_main.opacity = 1;
        } else {
            frame2_main.opacity = 0;
        }
        if (mouseOnStim(stim3_main, mouse_main)) {
            frame3_main.opacity = 1;
        } else {
            frame3_main.opacity = 0;
        }
        // Log response if a valid click was received
        if (gotValidClick) {
            // Get time elapsed since start exp.
            current_time_elapsed = (global_timer.getTime() - ref_time);
            // Log response
            counter = logClickResponse(mouse_main, current_trial_type, (mainTrials.thisN + 1), current_time_elapsed, counter);
        }

        // Stop routine after nMain trials
        if ((mainTrials.thisN === (nMain - 1))) {
            mainTrials.finished = true;
        }
Flow
  Routine start
  Routine IC
  Routine welcome
  Routine example
  LoopInitiator practiceTrials loopType="TrialHandler"
    conditionsFile = datasets/triplets.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Stim1', 'NC2_Images_KrauseMeinhardt(Nomate).png'), ('Stim2', 'NC1_Images_SteinitzNN(Nomate).png'), ('Stim3', 'C4_Images_IvanchukSavchenko(Reversed).png')]),
      OrderedDict([('Stim1', 'C5_Images_EasyPosition5(Reversed).png'), ('Stim2', 'C2_Images_KrauseMeinhardt.png'), ('Stim3', 'C3_Images_StudybyErcoledelRio(Reversed).png')]),
      OrderedDict([('Stim1', 'NC5_Images_EasyPosition5(Nomate)(Reversed).png'), ('Stim2', 'NC3_Images_Replacement3(Nomate).png'), ('Stim3', 'NC2_Images_KrauseMeinhardt(Nomate).png')]),
      OrderedDict([('Stim1', 'NC3_Images_KazicVukovic(Nomate)(Reversed).png'), ('Stim2', 'NC5_Images_EasyPosition5(Nomate)(Reversed).png'), ('Stim3', 'NC2_Images_SkujaRozenbergs(Nomate)(Reversed).png')]),
      OrderedDict([('Stim1', 'C3_Images_PodzerovKuntzevic(Reversed).png'), ('Stim2', 'C4_Images_BrankaWittwer(Reversed).png'), ('Stim3', 'C1_Images_WinterFriede(Reversed).png')]),
      OrderedDict([('Stim1', 'NC2_Images_KekhayovPetrov(Nomate)(Reversed).png'), ('Stim2', 'C3_Images_Replacement5.png'), ('Stim3', 'NC3_Images_Replacement5(Nomate).png')]),
      OrderedDict([('Stim1', 'NC4_Images_IvanchukSavchenko(Nomate)(Reversed).png'), ('Stim2', 'NC2_Images_KekhayovPetrov(Nomate)(Reversed).png'), ('Stim3', 'NC4_Images_StrekalovskyShaposhlikov(Nomate).png')]),
      OrderedDict([('Stim1', 'NC4_Images_StrekalovskyShaposhlikov(Nomate).png'), ('Stim2', 'NC2_Images_SkujaRozenbergs(Nomate)(Reversed).png'), ('Stim3', 'NC1_Images_SteinitzNN(Nomate).png')])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
    Routine practice
  LoopTerminator practiceTrials
  Routine pause
  LoopInitiator mainTrials loopType="TrialHandler"
    Selected rows = $subset_text
    conditionsFile = datasets/triplets.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Stim1', 'NC2_Images_KrauseMeinhardt(Nomate).png'), ('Stim2', 'NC1_Images_SteinitzNN(Nomate).png'), ('Stim3', 'C4_Images_IvanchukSavchenko(Reversed).png')]),
      OrderedDict([('Stim1', 'C5_Images_EasyPosition5(Reversed).png'), ('Stim2', 'C2_Images_KrauseMeinhardt.png'), ('Stim3', 'C3_Images_StudybyErcoledelRio(Reversed).png')]),
      OrderedDict([('Stim1', 'NC5_Images_EasyPosition5(Nomate)(Reversed).png'), ('Stim2', 'NC3_Images_Replacement3(Nomate).png'), ('Stim3', 'NC2_Images_KrauseMeinhardt(Nomate).png')]),
      OrderedDict([('Stim1', 'NC3_Images_KazicVukovic(Nomate)(Reversed).png'), ('Stim2', 'NC5_Images_EasyPosition5(Nomate)(Reversed).png'), ('Stim3', 'NC2_Images_SkujaRozenbergs(Nomate)(Reversed).png')]),
      OrderedDict([('Stim1', 'C3_Images_PodzerovKuntzevic(Reversed).png'), ('Stim2', 'C4_Images_BrankaWittwer(Reversed).png'), ('Stim3', 'C1_Images_WinterFriede(Reversed).png')]),
      OrderedDict([('Stim1', 'NC2_Images_KekhayovPetrov(Nomate)(Reversed).png'), ('Stim2', 'C3_Images_Replacement5.png'), ('Stim3', 'NC3_Images_Replacement5(Nomate).png')]),
      OrderedDict([('Stim1', 'NC4_Images_IvanchukSavchenko(Nomate)(Reversed).png'), ('Stim2', 'NC2_Images_KekhayovPetrov(Nomate)(Reversed).png'), ('Stim3', 'NC4_Images_StrekalovskyShaposhlikov(Nomate).png')]),
      OrderedDict([('Stim1', 'NC4_Images_StrekalovskyShaposhlikov(Nomate).png'), ('Stim2', 'NC2_Images_SkujaRozenbergs(Nomate)(Reversed).png'), ('Stim3', 'NC1_Images_SteinitzNN(Nomate).png')])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
    Routine main_exp
  LoopTerminator mainTrials
  Routine exit
